PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SEAL_LandTrav
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome to the SEAL Landmark Traversal Task
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  Routine Instruction
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
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      text:
        In this task, you are presented with a picture of an object

        Your task is to find the object

        Press Upper or Lower to start
    ButtonComponent Upper_button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-.3,-.18)
      size = (.4,.2)
      startVal [time (s)] = 0
      text = Upper
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    ButtonComponent Lower_button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.3, -.18)
      size = (.4,.2)
      startVal [time (s)] = 0
      text = Lower
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if mouse.isPressedIn(Upper_button):
            UpperTrialReps = 1
            LowerTrialReps = 0

        elif mouse.isPressedIn(Lower_button):
            UpperTrialReps = 0
            LowerTrialReps = 1
  Routine End
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Thank you for participating in the SEAL Landmark Traversal Task
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  Routine Lower_trial
    ImageComponent Landmark
      image [set every repeat] = $imageL
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, .35)
      startVal [time (s)] = 0.0
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      text:
        Please find this object
    ButtonComponent yesbutton
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.2, -.4)
      size = (.25, .15)
      startVal [time (s)] = 0
      text [set every repeat] = Yes
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    ButtonComponent nobutton
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -.4)
      size = (.25,.15)
      startVal [time (s)] = 0
      text [set every repeat] = No
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  Routine Upper_trial
    ImageComponent image
      image [set every repeat] = $imageU
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text = Please find this object
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    ButtonComponent yes_button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.2, -.4)
      size = .25,.15
      startVal [time (s)] = 0
      text [set every repeat] = Yes
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    ButtonComponent no_button
      bold = True
      borderColor = white
      borderWidth = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.2, -.4)
      size = .25,.15
      startVal [time (s)] = 0
      text [set every repeat] = No
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  Routine routine_500
  Routine blank
Flow
  Routine Welcome
  Routine Instruction
  LoopInitiator ShowLowerLandtrials_Loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = LowerTrialReps
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    LoopInitiator LowerLand_trials loopType="TrialHandler"
      conditionsFile = LandmarkTrav_Stimuli.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'imageL': 'TravImages/Landmark1_book.jpeg', 'imageU': 'TravImages/Landmark7_painting.jpeg'},
        {'imageL': 'TravImages/Landmark2_painting.jpeg', 'imageU': 'TravImages/Landmark8_painting.jpeg'},
        {'imageL': 'TravImages/Landmark3_waterfountain.jpeg', 'imageU': 'TravImages/Landmark9_painting.jpeg'},
        {'imageL': 'TravImages/Landmark4_vase.jpeg', 'imageU': 'TravImages/Landmark10_statue.jpeg'},
        {'imageL': 'TravImages/Landmark5_painting.jpeg', 'imageU': 'TravImages/Landmark11_painting.jpeg'},
        {'imageL': 'TravImages/Landmark6_map.jpeg', 'imageU': 'TravImages/Landmark12_statue.jpeg'},
        {'imageL': 'TravImages/Landmark7_painting.jpeg', 'imageU': 'TravImages/Landmark1_book.jpeg'},
        {'imageL': 'TravImages/Landmark8_painting.jpeg', 'imageU': 'TravImages/Landmark2_painting.jpeg'},
        {'imageL': 'TravImages/Landmark9_painting.jpeg', 'imageU': 'TravImages/Landmark3_waterfountain.jpeg'},
        {'imageL': 'TravImages/Landmark10_statue.jpeg', 'imageU': 'TravImages/Landmark4_vase.jpeg'},
        {'imageL': 'TravImages/Landmark11_painting.jpeg', 'imageU': 'TravImages/Landmark5_painting.jpeg'},
        {'imageL': 'TravImages/Landmark12_statue.jpeg', 'imageU': 'TravImages/Landmark6_map.jpeg'}]
      Routine Lower_trial
    LoopTerminator LowerLand_trials
  LoopTerminator ShowLowerLandtrials_Loop
  LoopInitiator ShowUpperLandtrials_Loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = UpperTrialReps
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    LoopInitiator UpperLand_trials loopType="TrialHandler"
      conditionsFile = LandmarkTrav_Stimuli.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'imageL': 'TravImages/Landmark1_book.jpeg', 'imageU': 'TravImages/Landmark7_painting.jpeg'},
        {'imageL': 'TravImages/Landmark2_painting.jpeg', 'imageU': 'TravImages/Landmark8_painting.jpeg'},
        {'imageL': 'TravImages/Landmark3_waterfountain.jpeg', 'imageU': 'TravImages/Landmark9_painting.jpeg'},
        {'imageL': 'TravImages/Landmark4_vase.jpeg', 'imageU': 'TravImages/Landmark10_statue.jpeg'},
        {'imageL': 'TravImages/Landmark5_painting.jpeg', 'imageU': 'TravImages/Landmark11_painting.jpeg'},
        {'imageL': 'TravImages/Landmark6_map.jpeg', 'imageU': 'TravImages/Landmark12_statue.jpeg'},
        {'imageL': 'TravImages/Landmark7_painting.jpeg', 'imageU': 'TravImages/Landmark1_book.jpeg'},
        {'imageL': 'TravImages/Landmark8_painting.jpeg', 'imageU': 'TravImages/Landmark2_painting.jpeg'},
        {'imageL': 'TravImages/Landmark9_painting.jpeg', 'imageU': 'TravImages/Landmark3_waterfountain.jpeg'},
        {'imageL': 'TravImages/Landmark10_statue.jpeg', 'imageU': 'TravImages/Landmark4_vase.jpeg'},
        {'imageL': 'TravImages/Landmark11_painting.jpeg', 'imageU': 'TravImages/Landmark5_painting.jpeg'},
        {'imageL': 'TravImages/Landmark12_statue.jpeg', 'imageU': 'TravImages/Landmark6_map.jpeg'}]
      Routine Upper_trial
    LoopTerminator UpperLand_trials
  LoopTerminator ShowUpperLandtrials_Loop
  Routine End
